PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = Final project-GROUP5
  keyboardBackend = Pyglet
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    ImageComponent image
      image = testImages_artphoto/anger_0274.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 1.0
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    TextComponent text
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b','g','y'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      storeCorrect = True
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  Routine congruent
    PolygonComponent fixation_2
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    ImageComponent image_2
      image = testImages_artphoto/amusement_0497.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 1.0
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    TextComponent text_2
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_2
      allowedKeys = 'r','b','g','y'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      storeCorrect = True
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  Routine incongru
    PolygonComponent fixation_3
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    ImageComponent image_3
      image = testImages_artphoto/disgust_0779.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 1.0
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    TextComponent text_3
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_3
      allowedKeys = 'r','b','g','y'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      storeCorrect = True
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  Routine congru
    PolygonComponent fixation_4
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    ImageComponent image_4
      image = testImages_artphoto/awe_0039.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 1.0
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    TextComponent text_4
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_4
      allowedKeys = 'r','b','g','y'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 4.0
      storeCorrect = True
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  Routine welcome
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = HEY THERE! Welcome to the experiment.
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  Routine break_
  Routine interval
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text = Take a pause
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  Routine almost
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = You are almost done!
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  Routine thanks
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for your participation.
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/manyamehta/Downloads/Incongruence - Copy.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'word': 'RED', 'color': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'RED', 'color': 'yellow', 'stim_condition': 'I', 'correct_res': 'y'},
      {'word': 'RED', 'color': 'green', 'stim_condition': 'I', 'correct_res': 'g'},
      {'word': 'BLUE', 'color': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'BLUE', 'color': 'green', 'stim_condition': 'I', 'correct_res': 'g'},
      {'word': 'BLUE', 'color': 'yellow', 'stim_condition': 'I', 'correct_res': 'y'},
      {'word': 'YELLOW', 'color': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'YELLOW', 'color': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'YELLOW', 'color': 'green', 'stim_condition': 'I', 'correct_res': 'g'},
      {'word': 'GREEN', 'color': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'GREEN', 'color': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'GREEN', 'color': 'yellow', 'stim_condition': 'I', 'correct_res': 'y'}]
    Routine trial
  LoopTerminator trials
  Routine interval
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/manyamehta/Downloads/congruence.xlsx
    loopType = random
    nReps = 19
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    conditions:
      [{'word': 'RED', 'color': 'red', 'stim_condition': 'C', 'correct_res': 'r'},
      {'word': 'BLUE', 'color': 'blue', 'stim_condition': 'C', 'correct_res': 'b'},
      {'word': 'YELLOW', 'color': 'yellow', 'stim_condition': 'C', 'correct_res': 'y'},
      {'word': 'GREEN', 'color': 'green', 'stim_condition': 'C', 'correct_res': 'g'}]
    Routine congruent
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = /Users/manyamehta/Downloads/Incongruence - Copy.xlsx
    loopType = random
    nReps = 7
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    conditions:
      [{'word': 'RED', 'color': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'RED', 'color': 'yellow', 'stim_condition': 'I', 'correct_res': 'y'},
      {'word': 'RED', 'color': 'green', 'stim_condition': 'I', 'correct_res': 'g'},
      {'word': 'BLUE', 'color': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'BLUE', 'color': 'green', 'stim_condition': 'I', 'correct_res': 'g'},
      {'word': 'BLUE', 'color': 'yellow', 'stim_condition': 'I', 'correct_res': 'y'},
      {'word': 'YELLOW', 'color': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'YELLOW', 'color': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'YELLOW', 'color': 'green', 'stim_condition': 'I', 'correct_res': 'g'},
      {'word': 'GREEN', 'color': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'GREEN', 'color': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'GREEN', 'color': 'yellow', 'stim_condition': 'I', 'correct_res': 'y'}]
    Routine incongru
  LoopTerminator trials_3
  Routine almost
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = /Users/manyamehta/Downloads/congruence.xlsx
    loopType = random
    nReps = 7
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    conditions:
      [{'word': 'RED', 'color': 'red', 'stim_condition': 'C', 'correct_res': 'r'},
      {'word': 'BLUE', 'color': 'blue', 'stim_condition': 'C', 'correct_res': 'b'},
      {'word': 'YELLOW', 'color': 'yellow', 'stim_condition': 'C', 'correct_res': 'y'},
      {'word': 'GREEN', 'color': 'green', 'stim_condition': 'C', 'correct_res': 'g'}]
    Routine congru
  LoopTerminator trials_4
  Routine thanks
